CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{1,2})_(?P<Strain>.*)_(?P<Rep>.*)_(?P<image_type>[A-P][A-P]).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain ".tif")
    Name to assign these images:RawBF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/tim/repos/Baer_CellProfiler_fitness/CellProfiler/mask/20220411_mask_v3.png
    Name to assign this image:well_mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRAW
    Image or measurement?:Image
    Select the first image:RawBF
    Multiply the first image by:1
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    Image or measurement?:Image
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
MaskImage:[module_num:6|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
    Select the input image:InvertedRAW
    Name the output image:MaskedRaw
    Use objects or an image as a mask?:Image
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    Select image for mask:well_mask
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:MaskedRaw
    Name the primary objects to be identified:Welloutline
    Typical diameter of objects, in pixel units (Min,Max):800,1800
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:MaskedRaw
    Name the output image:IllumGrey2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:100
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:9|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
    Select the input image:MaskedRaw
    Name the output image:CorrGrey2
    Select the illumination function:IllumGrey2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:CorrGrey2
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
EditObjectsManually:[module_num:11|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
    Select the objects to be edited:WormObjects
    Name the edited objects:SelectedSingleWorms
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:RawBF
    Allow overlapping objects?:No

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:SelectedSingleWorms
    Name the output image:SingleWormImage
    Select the color format:Binary (black & white)
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:SingleWormImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawBF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_SingleWorms
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
