CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{1,2})_(?P<Strain>.*)_(?P<Rep>.*)_(?P<image_type>[A-P][A-P]).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:1
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "BF.")
    Name to assign these images:RawBF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP.")
    Name to assign these images:RawGFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:/Users/tim/repos/Baer_CellProfiler_fitness/CellProfiler/mask/20220411_mask_v3.png
    Name to assign this image:well_mask
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:InvertedRAW
    Image or measurement?:Image
    Select the first image:RawBF
    Multiply the first image by:1
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    Image or measurement?:Image
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
MaskImage:[module_num:6|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
    Select the input image:InvertedRAW
    Name the output image:MaskedRaw
    Use objects or an image as a mask?:Image
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    Select image for mask:well_mask
    Invert the mask?:No

MaskImage:[module_num:7|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
    Select the input image:RawGFP
    Name the output image:MaskedGFP
    Use objects or an image as a mask?:Image
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    Select image for mask:well_mask
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskedRaw
    Name the primary objects to be identified:Welloutline
    Typical diameter of objects, in pixel units (Min,Max):800,1800
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:MaskedRaw
    Name the output image:IllumGrey2
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Object size
    Approximate object diameter:100
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:MaskedRaw
    Name the output image:CorrGrey2
    Select the illumination function:IllumGrey2
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:CorrGrey2
    Name the primary objects to be identified:WormObjects
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2
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
ConvertObjectsToImage:[module_num:12|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
    Select the input objects:WormObjects
    Name the output image:WormBinary
    Select the color format:Binary (black & white)
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
UntangleWorms:[module_num:13|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
    Select the input binary image:WormBinary
    Overlap style:Both
    Name the output overlapping worm objects:OverlappingWorms
    Name the output non-overlapping worm objects:NonOverlappingWorms
    Training set file location:Default Output Folder|
    Training set file name:Baer_fitness_model.xml
    Use training set weights?:Yes
    Overlap weight:5.0
    Leftover weight:10.0
    Retain outlines of the overlapping objects?:Yes
    Outline colormap?:Default
    Name the overlapped outline image:OverlappedWormOutlines
    Retain outlines of the non-overlapping worms?:Yes
    Name the non-overlapped outlines image:NonoverlappedWormOutlines
    Train or untangle worms?:Untangle
    Minimum area percentile:1.0
    Minimum area factor:0.85
    Maximum area percentile:90.0
    Maximum area factor:1.0
    Minimum length percentile:1.0
    Minimum length factor:0.9
    Maximum length percentile:99.0
    Maximum length factor:1.1
    Maximum cost percentile:90.0
    Maximum cost factor:1.9
    Number of control points:21
    Maximum radius percentile:90.0
    Maximum radius factor:1.0
    Maximum complexity:High
    Custom complexity:400

OverlayOutlines:[module_num:14|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RawBF
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:NonOverlappingWorms
    Select outline color:Green
    Select objects to display:Welloutline

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:NonOverlappingWorms
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

Morph:[module_num:16|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
    Select the input image:WormBinary
    Name the output image:WormWidthsFromBinary
    Select the operation to perform:distance
    Number of times to repeat operation:Once
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    Rescale values from 0 to 1?:Yes

MeasureObjectIntensity:[module_num:17|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
    Select images to measure:CorrGrey2
    Select objects to measure:NonOverlappingWorms

MaskImage:[module_num:18|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
    Select the input image:MaskedGFP
    Name the output image:WormMaskedGFP
    Use objects or an image as a mask?:Image
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    Select image for mask:WormBinary
    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:19|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
    Select the input image:WormMaskedGFP
    Name the primary objects to be identified:GFPobjects
    Typical diameter of objects, in pixel units (Min,Max):5,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:0.5
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigOverlay
    Name the output image:OrigOverlayWithGFP
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#1FF2FF
    Select objects to display:GFPobjects

MeasureObjectSizeShape:[module_num:21|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
    Select object sets to measure:GFPobjects
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:MaskedGFP
    Select objects to measure:GFPobjects

RelateObjects:[module_num:23|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
    Parent objects:NonOverlappingWorms
    Child objects:GFPobjects
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SaveImages:[module_num:24|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlayWithGFP
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawGFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_GFP
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:OverlappedWormOutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:RawBF
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:26|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:NonOverlappingWorms|Worm_Length,NonOverlappingWorms|Location_Center_Y,NonOverlappingWorms|Location_Center_X,NonOverlappingWorms|Children_GFPobjects_Count,Image|Count_OverlappingWorms,Image|Count_NonOverlappingWorms,Image|Count_GFPobjects,Image|Count_Welloutline,Image|Count_WormObjects,Image|FileName_RawBF,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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